PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '01', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = stroop
  exportHTML = manually
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      font = Hannotate SC
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
      units = height
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    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    TextComponent instrText
      font = Hannotate SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
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      text:
        准备好开始做Stroop任务了吗?

        记住要忽略你看到的词汇本身，然后在键盘上按这些键:
        看到红色的字按向左键
        看到绿色的字按向左键
        看到蓝色的字按向右键
        (按Esc键退出)

        现在按任意键就可以开始了！
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      font = Hannotate SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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      text:
        实验结束了。谢谢！
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xls
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('text', 'red'), ('letterColor', 'red'), ('corrAns', 'left'), ('congruent', 1)]),
      OrderedDict([('text', 'red'), ('letterColor', 'green'), ('corrAns', 'down'), ('congruent', 0)]),
      OrderedDict([('text', 'green'), ('letterColor', 'green'), ('corrAns', 'down'), ('congruent', 1)]),
      OrderedDict([('text', 'green'), ('letterColor', 'blue'), ('corrAns', 'right'), ('congruent', 0)]),
      OrderedDict([('text', 'blue'), ('letterColor', 'blue'), ('corrAns', 'right'), ('congruent', 1)]),
      OrderedDict([('text', 'blue'), ('letterColor', 'red'), ('corrAns', 'left'), ('congruent', 0)])]
    Routine trial
  LoopTerminator trials
  Routine thanks
